PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Psychophysics_project
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
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    ImageComponent image
      image [set every repeat] = $stim_file
      size = (7.5, 7.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
      units = degFlat
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  Routine instructions
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_instructions
      image = instructions.png
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator coffee1 loopType="TrialHandler"
    conditionsFile = project_conditions_coffee1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_a', 'Task': 'no-go', 'stim_file': 'coffee1.png'},
      {'Condit': 'coffee_a', 'Task': 'no-go', 'stim_file': 'coffee1.png'},
      {'Condit': 'coffee_a', 'Task': 'no-go', 'stim_file': 'coffee1.png'},
      {'Condit': 'coffee_a', 'Task': 'no-go', 'stim_file': 'coffee1.png'},
      {'Condit': 'coffee_a', 'Task': 'no-go', 'stim_file': 'coffee1.png'},
      {'Condit': 'coffee_a', 'Task': 'no-go', 'stim_file': 'coffee1.png'},
      {'Condit': 'coffee_a', 'Task': 'no-go', 'stim_file': 'coffee1.png'},
      {'Condit': 'coffee_a', 'Task': 'no-go', 'stim_file': 'coffee1.png'}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
    Routine trial
  LoopTerminator coffee1
  LoopInitiator coffee2 loopType="TrialHandler"
    conditionsFile = project_conditions_coffee2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'go', 'stim_file': 'water.png'},
      {'Condit': 'coffee_b', 'Task': 'no-go', 'stim_file': 'coffee2.png'},
      {'Condit': 'coffee_b', 'Task': 'no-go', 'stim_file': 'coffee2.png'},
      {'Condit': 'coffee_b', 'Task': 'no-go', 'stim_file': 'coffee2.png'},
      {'Condit': 'coffee_b', 'Task': 'no-go', 'stim_file': 'coffee2.png'},
      {'Condit': 'coffee_b', 'Task': 'no-go', 'stim_file': 'coffee2.png'},
      {'Condit': 'coffee_b', 'Task': 'no-go', 'stim_file': 'coffee2.png'},
      {'Condit': 'coffee_b', 'Task': 'no-go', 'stim_file': 'coffee2.png'},
      {'Condit': 'coffee_b', 'Task': 'no-go', 'stim_file': 'coffee2.png'}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
    Routine trial
  LoopTerminator coffee2
